// Batch convert LSM files to colour composite and RGB
//
// This macro batch converts.lsm files to RGB and composite TIFF's
// Using the channel colours from the LSM
//

// Ask user for source and destination folders
// Source = dir1 and should only contain .lsm files
// Destination = dir2 and should be different to dir1 and empty
dir1 = getDirectory("Choose Source Directory ");
dir2 = getDirectory("Choose Destination Directory ");

// Create a list of files in the source folder dir1
list = getFileList(dir1);

// Set batch processing mode, false = show processing, true = blank screen
setBatchMode(false);

// Create for next loop for number of files (list.length) in source folder (dir1) = i
for (i=0; i<list.length; i++) 
{
showProgress(i+1, list.length);

// Open file number i from dir1

open(dir1+list[i]);

Stack.setXUnit("micron");
run("Properties...", "pixel_width=0.795 pixel_height=0.795 voxel_depth=0.795");
run("Scale Bar...", "width=100 height=50 thickness=2 font=10 bold overlay");

Dialog.create("Time delta input");
Dialog.addString("Time?","");
Dialog.show();
int=Dialog.getString();

//run("Label...", "format=00:00:00 starting=0 interval=&int x=5 y=5 font=12 text=[] range=1-50 use");
run("Label...", "format=00:00:00 starting=0 interval=&int x=5 y=5 font=12 text=[] use");


ext="_movie_pub.avi";
f="compression=JPEG frame=5 save=["+dir2+list[i]+ext+"]";
run("AVI... ", f);

// Tidy up
close();


// Next image 
}
